PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['id*'], expName, expInfo['date'])
  Experiment info = {'id*': '999', '만 나이': '', '성별': '["여자", "남자"]', 'weather': '["yes", "no"]', 'boat': '["yes", "no"]', 'parachute': '["yes", "no"]', 'fish': '["yes", "no"]', 'test_mode': '["no", "yes"]'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  color = $[0,0,0]
  colorSpace = hsv
  expName = Main
  exportHTML = manually
  keyboardBackend = ioHub
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Routines
  Routine Flanker
    CodeComponent fl_anime
      Code Type = Auto->JS
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      Begin Experiment:
        he = 200
        wi = he

        dist_img =""
        targ_img =""

        a=""
        b=""
        d=""

        # small ones
        set1_angry_blink_g_1   = "pics/flan/set1_angry_grey_1.png"

        set1_neutral_blink_g_1   = "pics/flan/set1_neutral_grey_1.png"

        set1_happy_blink_g_1   = "pics/flan/set1_happy_grey_1.png"


        set1_angry_blink_y_1   = "pics/flan/set1_angry_yel_1.png"

        set1_neutral_blink_y_1   = "pics/flan/set1_neutral_yel_1.png"

        set1_happy_blink_y_1   = "pics/flan/set1_happy_yel_1.png"


        set1_angry_g   = "pics/flan/set1_angry_grey_4.png"
        set1_neutral_g = "pics/flan/set1_neutral_grey_4.png"
        set1_happy_g   = "pics/flan/set1_happy_grey_4.png"

        set1_angry_y   = "pics/flan/set1_angry_yel_4.png"
        set1_neutral_y = "pics/flan/set1_neutral_yel_4.png"
        set1_happy_y   = "pics/flan/set1_happy_yel_4.png"

        set2_angry_blink_g_1   = "pics/flan/set2_angry_grey_1.png"

        set2_neutral_blink_g_1   = "pics/flan/set2_neutral_grey_1.png"

        set2_happy_blink_g_1   = "pics/flan/set2_happy_grey_1.png"


        set2_angry_blink_y_1   = "pics/flan/set2_angry_yel_1.png"

        set2_neutral_blink_y_1   = "pics/flan/set2_neutral_yel_1.png"

        set2_happy_blink_y_1   = "pics/flan/set2_happy_yel_1.png"

        set2_angry_g   = "pics/flan/set2_angry_grey_4.png"
        set2_neutral_g = "pics/flan/set2_neutral_grey_4.png"
        set2_happy_g   = "pics/flan/set2_happy_grey_4.png"

        set2_angry_y   = "pics/flan/set2_angry_yel_4.png"
        set2_neutral_y = "pics/flan/set2_neutral_yel_4.png"
        set2_happy_y   = "pics/flan/set2_happy_yel_4.png"

        neg_button = "pics/neg_button.png"
        neu_button = "pics/neu_button.png"
        pos_button = "pics/pos_button.png"

        if counter_resp == jkl_resp:
            tex1 = 'J';
            tex2 = 'K';
            tex3 = 'L';
            j_img = neg_button;
            k_img = neu_button;
            l_img = pos_button;

        if counter_resp == lkj_resp:
            tex1 = 'L';
            tex2 = 'K';
            tex3 = 'J';
            j_img = pos_button;
            k_img = neu_button;
            l_img = neg_button;


        randg = [1,2,1,2,1,2,1,2,1,2];
        #rtn = 0;
        #colnt = shuffle(randg);
        #print(colnt);
      Begin Routine:
        t = 0
        rotationRate = 0.1  # revs per sec
        flashPeriod = 0.1  # seconds for one B-W cycle (ie 1/Hz)
        frn = 0;
        print(thisn, 'thisn')
        print(dist_cond, 'dis')
        print(targ_cond, 'tar')
        print(set_cond, 'set')

        ranint = randint(1,10);
        coln = randg[ranint];
        colnt = coln;
        #coln = randint(1,2);
        #randg = [1,2];
        #randgg = shuffle(randg);
        #rtn = rtn + 1;
        #rtnn = rtn%2 + 1;
        #coln = colnt[rtnn];
        #coln = randgg(rtnn);
        #coln = rtnn;
        print(coln, 'color')
        print(colnt, 'color')

        if coln == 1:
            if dist_cond == "negative" and set_cond == 1:
                d = set1_angry_g
                b = set1_angry_blink_g_1

            elif dist_cond == "negative" and set_cond == 2:
                d = set2_angry_g
                b = set2_angry_blink_g_1


            elif dist_cond == "neutral" and set_cond == 1:
                d = set1_neutral_g
                b = set1_neutral_blink_g_1

            elif dist_cond == "neutral" and set_cond == 2:
                d = set2_neutral_g
                b = set2_neutral_blink_g_1

            elif dist_cond == "positive" and set_cond == 1:
                d = set1_happy_g
                b = set1_happy_blink_g_1

            elif dist_cond == "positive" and set_cond == 2:
                d = set2_happy_g
                b = set2_happy_blink_g_1
            #dist_img=b


        elif coln == 2:
            if dist_cond == "negative" and set_cond == 1:
                d = set1_angry_y
                b = set1_angry_blink_y_1


            elif dist_cond == "negative" and set_cond == 2:
                d = set2_angry_y
                b = set2_angry_blink_y_1


            elif dist_cond == "neutral" and set_cond == 1:
                d = set1_neutral_y
                b = set1_neutral_blink_y_1


            elif dist_cond == "neutral" and set_cond == 2:
                d = set2_neutral_y
                b = set2_neutral_blink_y_1

            elif dist_cond == "positive" and set_cond == 1:
                d = set1_happy_y
                b = set1_happy_blink_y_1

            elif dist_cond == "positive" and set_cond == 2:
                d = set2_happy_y
                b = set2_happy_blink_y_1
            #dist_img=b

        if colnt == 1:
            if targ_cond == "negative" and set_cond== 1:
                a = set1_angry_g

            elif targ_cond == "negative" and set_cond== 2:
                a = set2_angry_g

            elif targ_cond == "neutral" and set_cond== 1:
                a = set1_neutral_g

            elif targ_cond == "neutral" and set_cond== 2:
                a = set2_neutral_g

            elif targ_cond == "positive" and set_cond == 1:
                a = set1_happy_g

            elif targ_cond == "positive" and set_cond == 2:
                a = set2_happy_g

            #targ_img=a

        elif colnt == 2:
            if targ_cond == "negative" and set_cond== 1:
                a = set1_angry_y

            elif targ_cond == "negative" and set_cond== 2:
                a = set2_angry_y

            elif targ_cond == "neutral" and set_cond== 1:
                a = set1_neutral_y

            elif targ_cond == "neutral" and set_cond== 2:
                a = set2_neutral_y

            elif targ_cond == "positive" and set_cond == 1:
                a = set1_happy_y

            elif targ_cond == "positive" and set_cond == 2:
                a = set2_happy_y



            #targ_img=a

        dist_img=b
        targ_img=a
        # The contents of this file are in the public domain.
        thisExp.addData('fl_cold', coln)
        thisExp.addData('fl_colt', colnt)
        thisExp.addData('fl_set', set_cond)
        thisExp.addData('fl_dcond', dist_cond)
        thisExp.addData('fl_tcond', targ_cond)
      Each Frame:
        nfrn = frameN/20;
        nlit = frameN%20;
        btemp = [9,10,11,12,13,14];

        btemp1 = [9,10,18,19];
        btemp2 = [11,12,16,17];
        btemp3 = [13,14,15];

        if nlit == 0:
            blist = [btemp[i]+nfrn*20 for i in range(len(btemp))];
            blist1 = [btemp1[i]+nfrn*20 for i in range(len(btemp1))];
            blist2 = [btemp2[i]+nfrn*20 for i in range(len(btemp2))];
            blist3 = [btemp3[i]+nfrn*20 for i in range(len(btemp3))];

        #print(blist, 'blist');

        if frameN in blist:  # more accurate to count frames
            dist1.setImage(b)
            dist2.setImage(b)
            dist3.setImage(b)
            dist4.setImage(b)
            targ.setImage(a)

        else:
            dist1.setImage(d)
            dist2.setImage(d)
            dist3.setImage(d)
            dist4.setImage(d)
            targ.setImage(a)


        #win.flip()
      End Routine:
        print('frames: ',frameN)
    CodeComponent fl_ans_cb
      Code Type = Auto->JS
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      Begin Routine:
        #win.mouseVisible = False
        if counter_resp == jkl_resp:
            fl_ans = ans1
            print('answer1 is ',ans1)
            print('fl_ans is ', fl_ans)
            posx = 0.1;
            negx = -0.1;
        elif counter_resp == lkj_resp:
            fl_ans = ans2
            print('answer2 is ',ans2)
            print('fl_ans is ', fl_ans)

        print(fl_ans)
    CodeComponent fl_code_clik
      Code Type = Auto->JS
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      Begin Experiment:
        proper_rt = 0
      Begin Routine:
        mouserec = fl_mouse.getPos()
        minRT = .2

        fl_res = ''
        fl_time = core.Clock()
      Each Frame:
        mouseloc = fl_mouse.getPos()
        if mouseloc[0]==mouserec[0] and mouseloc[1]==mouserec[1]:
            pass

        elif j_button.contains(fl_mouse):
            fl_res = 'j'
            proper_rt = fl_time.getTime()-1
            if t>minRT:
                continueRoutine = False
            else:
                mouserec = fl_mouse.getPos()


        elif k_button.contains(fl_mouse):
            fl_res = 'k'
            proper_rt = fl_time.getTime()-1
            if t>minRT:
                continueRoutine = False
            else:
                mouserec = fl_mouse.getPos()


        elif l_button.contains(fl_mouse):
            fl_res = 'l'
            proper_rt = fl_time.getTime()-1
            if t>minRT:
                continueRoutine = False
            else:
                mouserec = fl_mouse.getPos()
      End Routine:
        #flanker_main_loop.addData('fl_res')
        #if mouse_fl.clicked_name == ['j_button']:
        #    fl_res = 'j'
        #elif mouse_fl.clicked_name == ['k_button']:
        #    fl_res= 'k'
        #elif mouse_fl.clicked_name == ['l_button']:
        #    fl_res = 'l'

        fl_mouse.time = fl_time.getTime()-1

        if fl_res == fl_ans:
            fl_corr = 1
        elif fl_res != fl_ans:
            fl_corr = 0

        thisExp.addData('fl_ans', fl_ans)
        thisExp.addData('fl_res', fl_res)
        thisExp.addData('fl_corr', fl_corr)
        thisExp.addData('fl_rt', fl_mouse.time)
        thisExp.addData('fl_rt_2', proper_rt)
    ImageComponent fl_back_image
      image = pics\fl_back.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent fl_fix
      image = pics\fixation_2.png
      saveStartStop = False
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent dist1
      image [set every repeat] = $dist_img
      interpolate = nearest
      pos = (-he*.7, 0)
      saveStartStop = False
      size = (he, he)
      startVal [time (s)] = 1
      units = pix
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    ImageComponent dist2
      image [set every repeat] = $dist_img
      interpolate = nearest
      pos = (-(he+he)*.7, 0)
      saveStartStop = False
      size = (he, he)
      startVal [time (s)] = 1
      units = pix
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    ImageComponent dist3
      image [set every repeat] = $dist_img
      interpolate = nearest
      pos = (he*.7, 0)
      saveStartStop = False
      size = (he, he)
      startVal [time (s)] = 1
      units = pix
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    ImageComponent dist4
      image [set every repeat] = $dist_img
      interpolate = nearest
      pos = ((he+he)*.7, 0)
      saveStartStop = False
      size = (he, he)
      startVal [time (s)] = 1
      units = pix
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    ImageComponent targ
      image [set every repeat] = $targ_img
      interpolate = nearest
      size = (he, he)
      startVal [time (s)] = 1
      units = pix
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    ImageComponent j_button
      image = $j_img
      pos = (0.6, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent k_button
      image = $k_img
      pos = (0.7, -0.3)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l_button
      image = $l_img
      pos = (0.8, -0.2)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent fl_mouse
      clickable = j_button, k_button, l_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 1
      timeRelativeTo = routine
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  Routine flankerfeedback
    CodeComponent fl_feed_code
      Code Type = Auto->JS
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      Begin Routine:
        message = ""
        feedur = 0

        fl_mouse.time = fl_mouse.time

        if fl_mouse.time == []:
            fl_mouse.time = -1

        if (fl_mouse.time == -1):
            message = "더 빨리 응답하세요"
            feedur = 1
        elif (fl_mouse.time < 0.150):
            message = "고양이를 보고 반응하세요"
            feedur = 3
        elif (fl_mouse.time > 1.5) and (fl_corr == 1):
            message = "더 빨리 응답하세요"
            feedur = 1
        elif (fl_mouse.time > 1.5) and (fl_corr == 0):
            message = "오답, 더 빨리 응답하세요"
            feedur = 1
        elif (fl_mouse.time < 1.5) and (fl_corr == 1):
            message = ""
            feedur = 0
        elif (fl_mouse.time < 1.5) and (fl_corr == 0):
            message = "오답"
            feedur = 1


        print('response', fl_res)
        print('accuracy', fl_corr)
        print('rt', fl_mouse.time)
        print('message',message)
        print('feedur',feedur)
    ImageComponent fl_back_image2
      durationEstim = 3
      image = pics\fl_back.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedur
      units = pix
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    TextComponent fl_feedback
      color = darkred
      font = Malgun Gothic
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedur
      text [set every repeat] = $message
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    ImageComponent j_button2
      image = $j_img
      pos = (0.6, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedur
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    ImageComponent k_button2
      image = $k_img
      pos = (0.7, -0.3)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedur
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    ImageComponent l_button2
      image = $l_img
      pos = (0.8, -0.2)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedur
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  Routine fl_inst
    CodeComponent fl_inst_cb
      Code Type = Auto->JS
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      Begin Routine:
        if counter_resp == jkl_resp:
            inst='ins/inst_jkl.png'
        elif counter_resp == lkj_resp:
            inst='ins/inst_lkj.png'


        nowexp = 1;
        #fl 1 st 2
    ImageComponent fl_inst_img
      image [set every repeat] = ins\fl_inst_click.PNG
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 1
      units = pix
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    KeyboardComponent fl_inst_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent fl_inst_text_2
      color = black
      font = Malgun Gothic
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [condition] = $fl_inst_img.status==FINISHED
      text = 스페이스로 넘어가세요
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    SoundComponent fl_inst_sound
      saveStartStop = False
      sound = ins/fl_inst_click.wav
      startVal [time (s)] = 1
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    MouseComponent fl_next_again
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine fl_tag_prac
    CodeComponent fl_prac_tag
      Code Type = Auto->JS
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      Begin Routine:
        dist_cond = flanker_prac_loop.thisTrial["distractor"]
        targ_cond = flanker_prac_loop.thisTrial["target"]
        set_cond  = flanker_prac_loop.thisTrial["set"]
        thisn=flanker_prac_loop.thisN



        ##########TEST MODE###########
        if test_mode == 1 and thisn == 3:
            flanker_prac_loop.finished=True
      End Routine:
        flanker_prac_loop.addData('main_prac', 'prac')
  Routine fl_tag_main
    CodeComponent fl_main_tag
      Code Type = Auto->JS
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      Begin Routine:
        dist_cond = flanker_main_loop.thisTrial["distractor"]
        targ_cond = flanker_main_loop.thisTrial["target"]
        set_cond  = flanker_main_loop.thisTrial["set"]
        thisn = flanker_main_loop.thisN



        ##########TEST MODE###########
        if test_mode == 1 and thisn == 3:
            flanker_main_loop.finished=True
      End Routine:
        flanker_main_loop.addData('main_prac', 'main')
  Routine fl_starter_code
    CodeComponent fl_random_cb
      Code Type = Auto->JS
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      Begin Experiment:
        # neg, neut, pos order


        reps = 99 #default 99
        testing = 1 #default 1

        #fprac = 2 #default 2
        #fmain = 15 #default 15

        counter_resp = int(expInfo['id*'])%2

        #= randint(0, 1)
        #stset = randint(1,2)

        jkl_resp = 0
        lkj_resp = 1
      Begin Routine:
        win.fullscr = True

        if test_mode == 1:
            win.mouseVisible = True
        else:
            win.mouseVisible = False
    ImageComponent fl_starter_back
      image = pics/fl_back.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent fl_starter_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 2
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      text:
        집행기능 측정을 시작합니다.

        약 7분정도 소요됩니다.

        안내영상을 시청하시려면
        화면을 더블클릭하세요.
    KeyboardComponent fl_starter
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent fl_next_click
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine fl_say_practice
    ImageComponent fl_pracbac
      image = pics\fl_back.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    TextComponent fl_prac_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 연습 시작
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    MouseComponent fl_mouse_prac
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent fl_prac_code
      Code Type = Auto->JS
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      Begin Routine:
        mouserec=mouse_st.getPos()
        minRT = .2
      Each Frame:
        mouseloc = mouse_st.getPos()
        if mouseloc[0]==mouserec[0] and mouseloc[1]==mouserec[1]:
            pass
  Routine fl_rep2
    ImageComponent fl_back
      image = pics/fl_back.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent fl_inst_end_text
      color = black
      font = Malgun Gothic
      letterHeight = .07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        충분히 이해가 되셨으면
        연습으로 넘어가세요.

        화면 더블클릭
    KeyboardComponent fl_inst_end_key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fl_say_main
    ImageComponent fl_mainback
      image = pics\fl_back.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent fl_main_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        본 실험으로 넘어가려면
        화면을 더블클릭하세요
    KeyboardComponent fl_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent fl_mouse_m
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine total_end
    ImageComponent end_back
      image = fis_artwork/fish_background.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    TextComponent total_end_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        참여해주셔서 감사합니다.
        자동으로 종료됩니다.
  Routine para_starter_code
    CodeComponent para_random_cb
      Code Type = Auto->JS
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      Begin Experiment:
        # This code controls the response counter-balanccing.

        #constant for counter conditions
        bhya_resp = 0
        bayh_resp = 1

        counter_resp=int(expInfo['id*'])%2

        #
        #if counter_resp == bhya_resp:
        #    st2_selections = [0,1,2,3,4,5,6,7,10,11,12,13,14,15,16,17]
        #elif counter_resp == bayh_resp:
        #    st2_selections = [0,1,2,3,4,7,8,9,10,11,12,13,14,17,18,19]

        """ this snippet randomises the presentation
         order of stimuli between two lists"""
        stset = randint(1,2)
        if stset == 1:
            st2_set = 'loop\stroop_random1_trial_control.xlsx'
        elif stset == 2:
            st2_set = 'loop\stroop_random2_trial_control.xlsx'
      Begin Routine:
        win.fullscr = True

        if test_mode == 1:
            win.mouseVisible = True
        else:
            win.mouseVisible = False
    ImageComponent para_starter
      image = pics/st_back.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0
      units = pix
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    TextComponent para_starter_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 2
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      text:
        주의편향 측정을 시작합니다.

        안내영상을 시청하시려면
        화면을 더블클릭하세요.
    KeyboardComponent para_starter_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    MouseComponent para_skip_click
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2
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  Routine para_inst
    CodeComponent para_rep_code
      Code Type = Auto->JS
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      Begin Routine:
        if counter_resp == bhya_resp:
            inst='ins/st2_bhya.png'
            aud= 'ins/st2_bhya.wav'
            theanswer = '정답: 파랑-웃음, 노랑-화남'
        elif counter_resp == bayh_resp:
            inst='ins/st2_bayh.png'
            aud= 'ins/st2_bayh.wav'
            theanswer = '정답: 노랑-웃음, 파랑-화남'
      End Routine:
        backpic = 'pics\st_back.png';

        nowexp = 2;
        #fl 1 st 2
    ImageComponent para_inst_img
      image [set every repeat] = $inst
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0
      units = pix
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    SoundComponent para_inst_sound
      saveStartStop = False
      sound [set every repeat] = $aud
      startVal [time (s)] = 1
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    KeyboardComponent para_inst_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    MouseComponent para_click_next
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine para_rep
    ImageComponent para_inst_image
      image = pics/st_back.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent para_inst_text
      color = black
      font = Malgun Gothic
      letterHeight = .07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        연습을 시작하려면
        화면을 더블클릭하세요
    KeyboardComponent para_end_inst_key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine para_say_prac
    ImageComponent para_prac_back
      image = pics\st_back.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    TextComponent para_prac_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 연습 시작
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  Routine para_fix
    ImageComponent para_fix_back
      image = pics\st_back.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      units = pix
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    ImageComponent para_fix_2
      image = pics\fixation_2.png
      saveStartStop = False
      size = (0.025, 0.025)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent para_text_next
      color = black
      font = Malgun Gothic
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = 시작
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  Routine para_tag_prc
    CodeComponent para_prac_tag
      Code Type = Auto->JS
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      Begin Routine:
        dist_cond = para_prac_loop.thisTrial["distractor"]
        targ_cond = para_prac_loop.thisTrial["target"]
        set_cond  = para_prac_loop.thisTrial["set"]
        thisn = para_prac_loop.thisN




        ##########TEST MODE###########
        if test_mode == 1 and thisn == 3:
            para_prac_loop.finished=True
      End Routine:
        para_prac_loop.addData('main_prac', 'prac')
  Routine parachute
    CodeComponent para_code_ani
      Code Type = Auto->JS
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      Begin Experiment:
        posx = 960;
        posy = 540;

        para_yel = "pics/yellow.png"
        para_red = "pics/red.png"
        para_blu = "pics/blue.png"

        randg = [1,2,1,2,1,2,1,2,1,2]

        he = 200
        wi = he

        a=""
        b=""
        d=""

        # small ones
        set1_angry_blink_g_1   = "pics/flan/set1_angry_grey_1.png"

        set1_neutral_blink_g_1   = "pics/flan/set1_neutral_grey_1.png"

        set1_happy_blink_g_1   = "pics/flan/set1_happy_grey_1.png"


        set1_angry_blink_y_1   = "pics/flan/set1_angry_yel_1.png"

        set1_neutral_blink_y_1   = "pics/flan/set1_neutral_yel_1.png"

        set1_happy_blink_y_1   = "pics/flan/set1_happy_yel_1.png"


        set1_angry_g   = "pics/flan/set1_angry_grey_4.png"
        set1_neutral_g = "pics/flan/set1_neutral_grey_4.png"
        set1_happy_g   = "pics/flan/set1_happy_grey_4.png"

        set1_angry_y   = "pics/flan/set1_angry_yel_4.png"
        set1_neutral_y = "pics/flan/set1_neutral_yel_4.png"
        set1_happy_y   = "pics/flan/set1_happy_yel_4.png"

        set2_angry_blink_g_1   = "pics/flan/set2_angry_grey_1.png"

        set2_neutral_blink_g_1   = "pics/flan/set2_neutral_grey_1.png"

        set2_happy_blink_g_1   = "pics/flan/set2_happy_grey_1.png"


        set2_angry_blink_y_1   = "pics/flan/set2_angry_yel_1.png"

        set2_neutral_blink_y_1   = "pics/flan/set2_neutral_yel_1.png"

        set2_happy_blink_y_1   = "pics/flan/set2_happy_yel_1.png"

        set2_angry_g   = "pics/flan/set2_angry_grey_4.png"
        set2_neutral_g = "pics/flan/set2_neutral_grey_4.png"
        set2_happy_g   = "pics/flan/set2_happy_grey_4.png"

        set2_angry_y   = "pics/flan/set2_angry_yel_4.png"
        set2_neutral_y = "pics/flan/set2_neutral_yel_4.png"
        set2_happy_y   = "pics/flan/set2_happy_yel_4.png"

        neg_button = "pics/neg_button.png"
        neu_button = "pics/neu_button.png"
        pos_button = "pics/pos_button.png"
      Begin Routine:
        print(thisn)
        print(dist_cond)
        print(targ_cond)
        print(set_cond)

        #xrand = randint(-5,5);
        #yrand = randint(-5,5);
        #posx = 0.02*xrand;
        #posy = 0.02*yrand;
        posx = 0.0;
        posy = 0.0;


        ranint = randint(1,10);
        coln = randg[ranint];
        print(coln, 'color')


        if dist_cond == "negative" and set_cond == 1 and coln == 1:
            d = set1_angry_g
            b = set1_angry_blink_g_1

        elif dist_cond == "negative" and set_cond == 1 and coln == 2:
            d = set1_angry_y
            b = set1_angry_blink_y_1

        elif dist_cond == "neutral" and set_cond == 1 and coln == 1:
            d  = set1_neutral_g
            b = set1_neutral_blink_g_1

        elif dist_cond == "neutral" and set_cond == 1 and coln == 2:
            d  = set1_neutral_y
            b = set1_neutral_blink_y_1

        elif dist_cond == "positive" and set_cond == 1 and coln == 1:
            d  = set1_happy_g
            b = set1_happy_blink_g_1

        elif dist_cond == "positive" and set_cond == 1 and coln == 2:
            d  = set1_happy_y
            b = set1_happy_blink_y_1

        if dist_cond == "negative" and set_cond == 2 and coln == 1:
            d = set2_angry_g
            b = set2_angry_blink_g_1

        elif dist_cond == "negative" and set_cond == 2 and coln == 2:
            d = set2_angry_y
            b = set2_angry_blink_y_1

        elif dist_cond == "neutral" and set_cond == 2 and coln == 1:
            d  = set2_neutral_g
            b = set2_neutral_blink_g_1

        elif dist_cond == "neutral" and set_cond == 2 and coln == 2:
            d  = set2_neutral_y
            b = set2_neutral_blink_y_1

        elif dist_cond == "positive" and set_cond == 2 and coln == 1:
            d  = set2_happy_g
            b = set2_happy_blink_g_1

        elif dist_cond == "positive" and set_cond == 2 and coln == 2:
            d  = set2_happy_y
            b = set2_happy_blink_y_1


        if targ_cond == "blue":
            a = para_blu
            c = para_blu
        elif targ_cond == "blue":
            a = para_blu
            c = para_blu
        elif targ_cond == "blue":
            a = para_blu
            c = para_blu
        elif targ_cond == "red":
            a = para_red
            c = para_red
        elif targ_cond == "red":
            a = para_red
            c = para_red
        elif targ_cond == "red":
            a = para_red
            c = para_red
        elif targ_cond == "yellow":
            a = para_yel
            c = para_yel
        elif targ_cond == "yellow":
            a = para_yel
            c = para_yel
        elif targ_cond == "yellow":
            a = para_yel
            c = para_yel




        # The contents of this file are in the public domain.
      Each Frame:
        nfrn = frameN/20;
        nlit = frameN%20;
        btemp = [9,10,11,12,13,14];

        if nlit == 0:
            blist = [btemp[i]+nfrn*20 for i in range(len(btemp))];
        #if frameN in [18,19,20,38,39,40]:  # more accurate to count frames
        if frameN in blist:
            face_dist_2.setImage(b)
            para_targ_2.setImage(a)
        else:
            face_dist_2.setImage(d)
            para_targ_2.setImage(c)

        if st2_ans !='k' and t >=2.5:
            continueRoutine = False
      End Routine:
        print('frames',frameN)
    CodeComponent para_code
      Code Type = Auto->JS
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      Begin Experiment:
        para_rt = -1
      Begin Routine:
        if counter_resp == bhya_resp:
            st2_ans = ans1
            print('answer1 is ',ans1)
        elif counter_resp == bayh_resp:
            st2_ans = ans2
            print('answer2 is ',ans2)
        print(st2_ans)

        mouserec=mouse_st.getPos()
        minRT = .2


        st_res = None
        st_time = core.Clock()
      Each Frame:
        mouseloc = mouse_st.getPos()
        if mouseloc[0]==mouserec[0] and mouseloc[1]==mouserec[1]:
            pass

        elif para_targ_2.contains(mouse_st):
            st_res = 'k'
            para_rt = st_time.getTime()-1

            if t>minRT:
                continueRoutine = False
            else:
                mouserec = mouse_st.getPos()
      End Routine:
        #if mouse_st.clicked_name == ['para_targ_2']:
        #    st_res = 'k'
        #else :
        #    st_res = None

        mouse_st.time = st_time.getTime()
        mouse_st.time = mouse_st.time-1
        if st_res == st2_ans :
            st_corr = 1
        elif st_res != st2_ans :
            st_corr = 0

        print('corr',st_corr)

        thisExp.addData('st_ans', st2_ans)
        thisExp.addData('st_res', st_res)
        thisExp.addData('st_corr', st_corr)
        thisExp.addData('st_rt', mouse_st.time)
        thisExp.addData('st_rt2', para_rt)
    ImageComponent para_back
      image = pics\st_back.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent para_fix_prac
      image = pics\fixation_2.png
      saveStartStop = False
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent face_dist_2
      interpolate = nearest
      pos [set every repeat] = (posx, posy)
      saveStartStop = False
      size = (200, 200)
      startVal [time (s)] = 1
      units = pix
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    ImageComponent para_targ_2
      interpolate = nearest
      pos [set every repeat] = (posx, posy)
      saveStartStop = False
      size = (200, 200)
      startVal [time (s)] = 1
      units = pix
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    MouseComponent mouse_st
      clickable = para_targ_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 1
      timeRelativeTo = routine
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    KeyboardComponent st2_resp
      allowedKeys = 'k'
      correctAns = $st2_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      storeCorrect = True
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    TextComponent text
      font = Malgun Gothic
      letterHeight = 0.04
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $theanswer
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  Routine para_feedback
    CodeComponent para_feed_code
      Code Type = Both
      Begin JS Routine:
        console.log("accuracy", st2_resp.corr);
        if ((st2_resp.rt == undefined)) {
            st2_resp.rt = -1;
        }
        console.log("rt", st2_resp.rt);
        if (((st2_resp.rt === (- 1)) && (st2_resp.corr === 1))) {
            message = "";
            feedur = 0.0;
        } else {
            if (((st2_resp.rt === (- 1)) && (st2_resp.corr === 0))) {
                message = "Respond Faster";
                feedur = 1;
            } else {
                if (((st2_resp.rt > 1) && (st2_resp.corr === 1))) {
                    message = "Respond Faster";
                    feedur = 1;
                } else {
                    if (((st2_resp.rt > 1) && (st2_resp.corr === 0))) {
                        message = "Incorrect, Respond Faster";
                        feedur = 1;
                    } else {
                        if (((Math.abs(st2_resp.rt) < 1) && (st2_resp.corr === 1))) {
                            message = "";
                            feedur = 0;
                        } else {
                            if (((Math.abs(st2_resp.rt) < 1) && (st2_resp.corr === 0))) {
                                message = "Incorrect";
                                feedur = 1;
                            }
                        }
                    }
                }
            }
        }
      Begin Routine:
        message = ""
        feedur = 0

        print('rt', mouse_st.time)
        print('st_cor', st_corr)
        if (mouse_st.time > 1.5) and (st_corr == 1) and (st2_ans == 'k'):
            message = "좀 더 빨리 응답하세요"
            feedur = 1
        elif (mouse_st.time < 0.150):
            message = "고양이를 보고 반응하세요"
            feedur = 3
        elif (mouse_st.time > 1.5) and (st_corr == 0) and (st2_ans == 'k'):
            message = "오답, 좀 더 빨리 응답하세요"
            feedur = 1
        elif (st2_ans == 'k') and (st_corr == 1):
            message = ""
            feedur = 0.0
        elif (st2_ans != 'k') and (st_corr == 1):
            message = ""
            feedur = 0.0
        elif (st2_ans == 'k') and (st_corr == 0):
            message = "오답"
            feedur = 1
        elif (st2_ans != 'k') and (st_corr == 0):
            message = "오답"
            feedur = 1
    ImageComponent para_f_back
      image = pics\st_back.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedur
      units = pix
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    TextComponent para_feed_message
      color = darkred
      font = Malgun Gothic
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedur
      text [set every repeat] = $message
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  Routine para_say_main
    ImageComponent para_main_back
      image = pics\st_back.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent para_main_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        충분히 이해되셨나요?

        시작하려면 화면을
        더블클릭하세요
    MouseComponent para_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine para_tag_main
    CodeComponent para_main_tag
      Code Type = Auto->JS
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      Begin Routine:
        dist_cond = para_main_loop.thisTrial["distractor"]
        targ_cond = para_main_loop.thisTrial["target"]
        set_cond  = para_main_loop.thisTrial["set"]
        thisn = para_main_loop.thisN

        ##########TEST MODE###########
        if test_mode == 1 and thisn == 3:
            para_main_loop.finished=True


        theanswer=''
      End Routine:
        para_main_loop.addData('main_prac', 'main')
  Routine fl_fix_2
    ImageComponent back_2
      image = pics\fl_back.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      units = pix
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    ImageComponent fixation_2
      image = pics\fixation_2.png
      interpolate = nearest
      saveStartStop = False
      size = (0.025, 0.025)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent fl_next
      color = black
      font = Malgun Gothic
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = 시작
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  Routine fis_initialSet
    CodeComponent fis_CounterBalancing_code
      Code Type = Auto->JS
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      Begin Experiment:
        name_var = expInfo['id*']
        num_var = int(name_var[:3])

        if (num_var %2) == 0: #if even number,
            #GreenLoop = 1
            #OrangeLoop = 0
            GOloop = 0;
            GOprac = 'loop/[통합실험]ExpListGreen_Practice.xlsx'
            GOmain = 'loop/[통합실험]ExpListGreen_Round1.xlsx'
            #Green fish would be correct fish
        else: #if odd number,
            #GreenLoop = 0
            #OrangeLoop = 1
            #Orange fish would be correct fish
            GOloop = 1;
            GOprac = 'loop/[통합실험]ExpListOrange_Practice.xlsx'
            GOmain = 'loop/[통합실험]ExpListOrange_Round1.xlsx'


        InstCount = 5 # default 5
        PracCount = 5 # default 5
        fis_roundN = 1 # default 1
        #fis_round_tot = 5; # default 5
        Gnum = 0;
        Onum = 1;
      Begin Routine:
        win.fullscr = True

        if test_mode == 1:
            win.mouseVisible = True
        else:
            win.mouseVisible = False
    ImageComponent image
      image = fis_artwork/fish_background.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent fis_text_2
      color = black
      font = Malgun Gothic
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        사회적 민감성 측정을 시작합니다.

        안내영상을 시청하시려면
        화면을 더블클릭
    KeyboardComponent fis_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine fis_Instruction
    ImageComponent fis_backs
      image = fis_artwork/fish_background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [condition] = $fis_movie.status==FINISHED
      units = pix
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    MovieComponent fis_movie
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $insmov
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent fis_skip_movie
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [condition] = $fis_movie.status==FINISHED
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      text:
        충분히 이해되셨으면
        더블클릭으로 넘어가세요
    KeyboardComponent fis_secret_quit
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent fis_code_9
      Code Type = Auto->JS
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      Begin Experiment:
        if GOloop == Gnum:
            GOcon = Gnum;
            insmov= 'fis_artwork/fish_instruction_GreenVersion.mp4'
        elif GOloop == Onum:
            GOnum = Onum;
            insmov= 'fis_artwork/fish_instruction_OrangeVersion.mp4'

        PracCount= 5
      Begin Routine:
        fish_trials = 1
  Routine fis_passint
    ImageComponent fis_PassI_2
      image = fis_artwork/fish_background.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent fis_to_practice
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        충분히 이해되셨으면
        스페이스로 넘어가세요
    KeyboardComponent fis_PassInst_2
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent fis_praccount_numbering_2
      Code Type = Auto->JS
  Routine fis_startprac
    MouseComponent fis_mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.5
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    CodeComponent fis_praccount_numbering
      Code Type = Auto->JS
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      Begin Experiment:
        PracCount= 5
      Begin Routine:
        win.mouseVisible = True


        fish_trials = 1
    ImageComponent fis_image
      image = fis_artwork/StartPrac.PNG
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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  Routine fis_readycount
    ImageComponent fis_back
      image = fis_artwork/fish_background.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      units = pix
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    TextComponent fis_start_prac
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = 준비
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    TextComponent fis_get_ready
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2
      text = 시작
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  Routine fis_practiral
    SliderComponent fis_slider_2
      fillColor = $(-0.0039, 1.0000, 0.6627)
      flip = True
      forceEndRoutine = True
      granularity = 0
      labels = ('approach','avoid')
      letterHeight = 0.05
      pos = (0, 0.0)
      size = (0.4, .6)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1,2)
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    CodeComponent fis_code_2
      Code Type = Auto->JS
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      Begin Routine:
        fis_slider_2.marker = Fish_2
        fis_slider_2.markerPos = 1.5

        print(_thisDir)
      Each Frame:
        TextPosition_2 = (fis_slider_2.markerPos-1.1)/1.65
        BoxPosition_2 = TextPosition_2 +0.023
      End Routine:
        if fis_slider_2.getRating() > 1.55:
            Response_2 = "ScrollUp"
        else:
            if fis_slider_2.getRating() < 1.45:
                Response_2 = "ScrollDown"
            else:
                Response_2 = "NoResponse"

        if CorrectResp == Response_2:
            Feedback_2 = '정답'
        else:
            if Response_2 == "NoResponse":
                Feedback_2 = '무응답'
            else:
                Feedback_2 = "오답"

        fish.addData('Response_2', Response_2)
        fish.addData('Feedback_2', Feedback_2)
    ImageComponent fis_BackGround_2
      image = fis_artwork/fish_background.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Fish_2
      image [set every repeat] = $os.path.join(_thisDir,"fis_artwork", str(FishTypeFile))
      pos = (1, 1)
      size = (0.41, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent fis_WordBox_2
      image = fis_artwork/speechcloud_long.png
      ori = 7
      pos [set every frame] = [0, BoxPosition_2]
      size = (1, 0.42)
      startVal [time (s)] = 0.0
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    TextComponent fis_Words_2
      font = Malgun Gothic
      languageStyle = RTL
      letterHeight = 0.07
      pos [set every frame] = [-0.03,TextPosition_2]
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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  Routine fis_feedback_prac
    ImageComponent fis_BackGround_Feedback_2
      image = fis_artwork/fish_background.png
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    TextComponent fis_Feedbacks_2
      font = Malgun Gothic
      letterHeight = 0.08
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $str(Feedback_2)
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  Routine fis_continue_prac
    ImageComponent fis_image_3
      image = fis_artwork/fish_background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent fis_Continue_or_not
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent fis_mouse_skip
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent fis_next_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        충분히 이해되셨나요?

        정확하고, 최대한 빠르게 반응할수록
        좋은 결과를 얻을 수 있습니다.

        화면을 더블클릭하여
        본시행으로 넘어가세요
  Routine fis_startMain
    ImageComponent fis_startmain
      image = fis_artwork/fish_background.png
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    TextComponent fis_next_text_2
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        더블클릭으로 넘어가세요.
    MouseComponent fis_mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine fis_main_trial
    SliderComponent fis_slider
      fillColor = $(-0.0039, 1.0000, 0.6627)
      flip = True
      forceEndRoutine = True
      granularity = 0
      labels = ('approach','avoid')
      letterHeight = 0.05
      pos = (0, 0.0)
      size = (0.4, .6)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1,2)
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    CodeComponent fis_code
      Code Type = Auto->JS
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      Begin Routine:
        fis_slider.marker = Fish
        fis_slider.markerPos = 1.5
        my_text = visual.TextStim(win, text=Word, font='NanumSquare_acB.ttf')

        print(_thisDir)
      Each Frame:
        TextPosition = (fis_slider.markerPos-1.1)/1.65
        BoxPosition = TextPosition +0.023
      End Routine:
        if fis_slider.getRating() > 1.55:
            Response = "ScrollUp"
        else:
            if fis_slider.getRating() < 1.45:
                Response = "ScrollDown"
            else:
                Response = "NoResponse"

        if CorrectResp == Response:
            Feedback = '정답'
        else:
            if Response == "NoResponse":
                Feedback = '무응답'
            else:
                Feedback = "오답"

        fis_temp.addData('Response', Response)
        fis_temp.addData('Feedback', Feedback)
    ImageComponent fis_BackGround
      image = fis_artwork/fish_background.png
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent Fish
      image [set every repeat] = $os.path.join(_thisDir,"fis_artwork", str(FishTypeFile))
      pos = (1, 1)
      size = (0.41, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent fis_WordBox
      image = fis_artwork/speechcloud_long.png
      ori = 7
      pos [set every frame] = [0, BoxPosition]
      size = (1, 0.42)
      startVal [time (s)] = 0.0
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    TextComponent fis_Words
      font = Malgun Gothic
      languageStyle = RTL
      letterHeight = 0.07
      pos [set every frame] = [-0.03,TextPosition]
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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    CodeComponent fis_test_mode
      Code Type = Auto->JS
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      Begin Routine:
        thisn = fis_trials.thisN

        ##########TEST MODE###########
        if test_mode == 1 and thisn == 3:
            fis_trials.finished=True
            fis_round.finished=True
            fish.finished=True
  Routine fis_feedback_trial
    ImageComponent fis_BackGround_Feedback
      image = fis_artwork/fish_background.png
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    TextComponent fis_Feedbacks
      font = Malgun Gothic
      letterHeight = 0.08
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $str(Feedback)
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  Routine fis_main_control
    CodeComponent fis_code_4
      Code Type = Auto->JS
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      Begin Routine:
        if fis_roundN == 3:
            fis_mainbreak = 0
        else:
            fis_mainbreak = 1


        fis_roundN = fis_roundN + 1
        fis_round.addData('fis_roundN', fis_roundN)



        if GOloop == Gnum:
            if fis_roundN == 2:
                GOmain = 'loop/[통합실험]ExpListGreen_Round2.xlsx'
            elif fis_roundN == 3:
                GOmain = 'loop/[통합실험]ExpListGreen_Round3.xlsx'
            elif fis_roundN == 4:
                GOmain = 'loop/[통합실험]ExpListGreen_Round4.xlsx'
            elif fis_roundN == 5:
                GOmain = 'loop/[통합실험]ExpListGreen_Round5.xlsx'
        elif GOloop == Onum:
            if fis_roundN == 2:
                GOmain = 'loop/[통합실험]ExpListOrange_Round2.xlsx'
            elif fis_roundN == 3:
                GOmain = 'loop/[통합실험]ExpListOrange_Round3.xlsx'
            elif fis_roundN == 4:
                GOmain = 'loop/[통합실험]ExpListOrange_Round4.xlsx'
            elif fis_roundN == 5:
                GOmain = 'loop/[통합실험]ExpListOrange_Round5.xlsx'

        if test_mode == 1:
            fis_mainbreak = 0
            #fis_round.finished=True
            #fish.finished=True
            #fish_loop = 0
  Routine fis_rout_break
    ImageComponent fis_break_interval
      image = fis_artwork/fish_background.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = pix
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    TextComponent fis_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        30초 휴식 후 다음 라운드를 시작하겠습니다.

        특정 요청을 하는 물고기가 더 많아집니다.

        말풍선을 유심히 봐주시기 바랍니다.
  Routine fis_interblock
    MouseComponent fis_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent fis_stratnextround
      image = fis_artwork/fish_background.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent fis_stt_round
      color = black
      font = Malgun Gothic
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        시작하려면
        화면을 더블클릭 하세요
  Routine fis_end
    ImageComponent fis_endgame
      image = fis_artwork/EndGame.PNG
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine total_loop
    CodeComponent exp_code
      Code Type = Auto->JS
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      Begin Routine:
        exp_loop = exp_loop + 1
        boat_loop = 0
        para_loop = 0
        fish_loop = 0

        if exp_loop == 2:
            boat_loop = exp_order1[0]
            para_loop = exp_order1[1]
            fish_loop = exp_order1[2]
            exp_text = '스페이스바를 누르면 두번째 실험으로 넘어갑니다'
        elif exp_loop == 3:
            boat_loop = exp_order2[0]
            para_loop = exp_order2[1]
            fish_loop = exp_order2[2]
            exp_text = '스페이스바를 누르면 세번째 실험으로 넘어갑니다'
        elif exp_loop == 4:
            boat_loop = exp_order3[0]
            para_loop = exp_order3[1]
            fish_loop = exp_order3[2]
            exp_text = '스페이스바를 누르면 마지막 실험으로 넘어갑니다'
        elif exp_loop == 5:
            total_experiment.finished = True

        if skip_boat == 1:
            boat_loop = 0
        if skip_para == 1:
            para_loop = 0
        if skip_fish == 1:
            fish_loop = 0

        win.fullscr = True
  Routine Total_control
    CodeComponent time_control
      Code Type = Auto->JS
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      Begin Experiment:
        ### WEATHER TIME CONTROL

        # 자유연상시간 연습
        stimulus_interval_prac = 5
        # 자유연상시간 실제
        stimulus_interval = 30 #original 30
        # 전환시간 2초
        transition_duration = 2
      Begin Routine:
        win.mouseVisible = False
    CodeComponent total_code
      Code Type = Auto->JS
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      Begin Experiment:
        tot_order = int(expInfo['id*'])%6 + 1

        if tot_order == 1:
            exp_order1 = [1,0,0] #flanker, parachute, fish.
            exp_order2 = [0,1,0]
            exp_order3 = [0,0,1]
        elif tot_order == 2:
            exp_order1 = [1,0,0]
            exp_order2 = [0,0,1]
            exp_order3 = [0,1,0]
        elif tot_order == 3:
            exp_order1 = [0,1,0]
            exp_order2 = [1,0,0]
            exp_order3 = [0,0,1]
        elif tot_order == 4:
            exp_order1 = [0,1,0]
            exp_order2 = [0,0,1]
            exp_order3 = [1,0,0]
        elif tot_order == 5:
            exp_order1 = [0,0,1]
            exp_order2 = [1,0,0]
            exp_order3 = [0,1,0]
        elif tot_order == 6:
            exp_order1 = [0,0,1]
            exp_order2 = [0,1,0]
            exp_order3 = [1,0,0]

        exp_loop = 1
    CodeComponent trial_numbers_2
      Code Type = Auto->JS
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      Begin Experiment:
        skip_weather = 1
        skip_boat = 0
        skip_para = 0
        skip_fish = 0
        test_mode = 0

        activate_weather = expInfo['weather']
        activate_boat = expInfo['boat']
        activate_para = expInfo['parachute']
        activate_fish = expInfo['fish']
        activate_test_mode = expInfo['test_mode']


        if activate_weather == 'no':
            skip_weather = 0

        if activate_boat == 'no':
            skip_boat = 1
        if activate_para == 'no':
            skip_para = 1
        if activate_fish == 'no':
            skip_fish = 1
        if activate_test_mode == 'yes':
            test_mode = 1


        # you can change trial numbers for test

        # weather
        wth_repeat_prac_n = 99 # default 99
        wth_trials_n = 4; # 마음날씨 시행반복횟수, 기본 4회 (삼성병원실험)

        # flanker (boat)
        fprac = 2 #default 2
        fmain = 8 #default (삼성병원 8) /  일반 15)

        # parachute
        para_prac = 2 #default 2 (practice loop)
        para_main = 1 #default 1 (main loop)

        # fish
        fis_round_tot = 3; # default 5 trial control 3
        fish_practice_reps = 3

        #############TEST MODE###############
        if test_mode == 1:
            wth_trials_n = 1
            # 자유연상시간 연습
            stimulus_interval_prac = 3
            # 자유연상시간 실제
            stimulus_interval = 5 #original 30
            # 사회적 민감성
            fish_practice_reps = 1
  Routine general_instruction
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        win.fullscr = False
        #not sure if this is necessary
        win.winHandle.set_fullscreen(False)
        win.winHandle.minimize()
        win.flip()

        win.winHandle.maximize()
        win.flip()
    ImageComponent wth_inst_image
      image = fis_artwork/general_instruction.png
      saveStartStop = False
      size = [1920, 1080]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent gen_inst_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wth_inst
    MovieComponent wth_movie
      backend = moviepy
      forceEndRoutine = True
      movie = ins/weather_intro.mp4
      saveStartStop = False
      size = [1920, 1080]
      startVal [time (s)] = 2
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine wth_begin_prac
    ImageComponent wth_background_inst
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0
      units = pix
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    TextComponent wth_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        단어연상 연습이 시작됩니다.

        준비되셨으면 스페이스로 넘어가세요.
    KeyboardComponent wth_next_next
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        win.fullscr=False
  Routine wth_think_prac
    ImageComponent wth_background_6
      durationEstim = 10
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulus_interval_prac
      units = pix
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    CodeComponent wth_code_6
      Code Type = Auto->JS
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      Begin Routine:
        win.fullscr=False
      End Routine:
        thisExp.addData('stimulus_interval', stimulus_interval)
    TextComponent wth_think_instr_2
      color = black
      durationEstim = 10
      font = Malgun Gothic
      letterHeight = 0.07
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulus_interval_prac
      text = 자유롭게 생각하세요.
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    PolygonComponent wth_think_cross_2
      durationEstim = 10
      fillColor = black
      lineColor = black
      lineWidth = .1
      saveStartStop = False
      shape = cross
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulus_interval_prac
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  Routine wth_word_prac
    ImageComponent wth_word_back
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent wth_word_instr_4
      color = black
      font = Malgun Gothic
      letterHeight = 0.06
      pos = (0, 0.25)
      saveStartStop = False
      startEstim = 0
      startVal [time (s)] = 0
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      text:
        지금 무슨 생각을 하고 있는지
        단어나 구로 입력해주세요.
    CodeComponent wth_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from tkinter import *
        end_rt = 0
        inputValue = ""
      Begin Routine:
        win.mouseVisible = True
      Each Frame:
        while t > 1:
            start_time = core.getTime()
            root = Tk()
            root.attributes('-topmost',True)

            def retrieve_input():
                global inputValue, continueRoutine, end_rt, t
                inputValue=Tx.get("1.0","end-1c")
                end_rt = core.getTime() - start_time
                root.destroy()
                continueRoutine = False
                record_time = True
                return inputValue, end_rt

            root.overrideredirect(True)
            #Root Geometry
            root_Width = 400
            root_Length = 300

            # Coordinates of top left pixel of application for centred
            x_left = int(root.winfo_screenwidth()/2-root_Width/2)
            y_top = int(root.winfo_screenheight()/2-root_Length/2)
            root_Pos = "+" + str(x_left) + "+" + str(y_top)

            # Window size and position
            root.geometry(str(root_Width) + "x" + str(root_Length) + root_Pos)
            #root.geometry('400x300+400+200')

            Tx = Text(root, font = ("MalgunGothic 30 bold"), height = 5)
            Tx.pack(side = TOP)

            button = Button(root, text='입력완료', command=lambda: retrieve_input(), height = 3, width= 20)
            button.pack(expand=1, side = BOTTOM)
            root.attributes('-topmost',True)
            root.update()
            root.mainloop()
            print(inputValue)
            break
        wth_repeat_prac.addData('wth_resp', inputValue) ########
        wth_repeat_prac.addData('wth_rt', end_rt) ########
  Routine wth_rating_prac
    ImageComponent wth_background_7
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent wth_word_typed_2
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inputValue
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    SliderComponent wth_valence_rating_2
      borderColor = black
      color = black
      fillColor = red
      font = Malgun Gothic
      forceEndRoutine = False
      granularity = 0
      labels = ("부정", "중립", "긍정")
      letterHeight = 0.03
      pos = (-0.5, -.1)
      saveStartStop = False
      size = (0.45, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (-1, 0, 1)
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    TextComponent wth_valence_txt_2
      color = black
      font = Malgun Gothic
      letterHeight = 0.04
      pos = (-.5, -0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 단어에서 느껴지는 감정
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    TextComponent wth_self_txt_2
      color = black
      font = Malgun Gothic
      letterHeight = 0.04
      pos = (0.5, -.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 단어가 자신과 관련이 있는 정도
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    SliderComponent wth_self_rating_2
      borderColor = black
      color = black
      fillColor = red
      font = Malgun Gothic
      forceEndRoutine = False
      granularity = 0
      labels = ("전혀 나와 관련 없음","나와 관련 매우 많음")
      letterHeight = 0.03
      pos = (0.5, -.1)
      saveStartStop = False
      size = (.45, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 1)
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    TextboxComponent wth_rating_end_2
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      font = Malgun Gothic
      letterHeight = 0.03
      pos = (-.02, -.42)
      saveStartStop = False
      size = (0.19, 0.06)
      startVal [condition] = $wth_self_rating_2.rating and wth_valence_rating_2.rating
      text = 클릭해 주세요
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    MouseComponent wth_mouse_5
      clickable = wth_rating_end_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = $wth_self_rating_2.rating and wth_valence_rating_2.rating
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    CodeComponent wth_code_8
      Code Type = Auto->JS
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      Begin Routine:
        win.fullscr=False
      Each Frame:
        wth_valence_rating_2.marker.size = (0.002,0.05)
        wth_self_rating_2.marker.size = (0.002,0.05)
  Routine wth_end_inst
    ImageComponent wth_image_2
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent wth_text_4
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        넘어가시겠습니까?

        넘어가기 : Y
        다시연습 : N
    KeyboardComponent wth_key_resp_4
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent wth_code_11
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
        win.fullscr=False
      End Routine:
        if wth_key_resp_4.keys == 'y':
            wth_repeat_prac.finished = True
  Routine wth_start
    ImageComponent wth_background_inst_2
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent wth_text_2
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        단어연상을 시작합니다

        연상시간은 30초이며
        총 4회 반복됩니다

        스페이스로 넘어가세요
    KeyboardComponent wth_key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wth_begin_main
    ImageComponent wth_begin_background
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      units = pix
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    TextComponent wth_begin_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = 시작
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  Routine wth_think
    ImageComponent wth_background
      durationEstim = 33
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulus_interval+3
      units = pix
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    CodeComponent wth_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('stimulus_interval', stimulus_interval)
    TextComponent wth_think_instr
      color = black
      durationEstim = 30
      font = Malgun Gothic
      letterHeight = 0.07
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = $stimulus_interval
      text = 자유롭게 생각하세요.
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    PolygonComponent wth_think_cross
      durationEstim = 30
      fillColor = black
      lineColor = black
      lineWidth = .1
      saveStartStop = False
      shape = cross
      size = (0.07, 0.07)
      startVal [time (s)] = 3
      stopVal [duration (s)] = $stimulus_interval
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  Routine wth_word
    ImageComponent wth_background_2
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent wth_word_instr
      color = black
      font [set every repeat] = Malgun Gothic
      letterHeight = 0.07
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        지금 무슨 생각을 하고 있는지
        단어나 구로 입력해주세요.
    CodeComponent wth_code_4
      Code Type = Auto->JS
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      Begin Experiment:
        record_time = False
        wth_word_type_end = 0
      Begin Routine:
        win.mouseVisible = True
      Each Frame:
        while t > 1:
            start_time = core.getTime()
            root = Tk()
            root.attributes('-topmost',True)

            def retrieve_input():
                global inputValue, continueRoutine, end_rt, t
                inputValue=Tx.get("1.0","end-1c")
                end_rt = core.getTime() - start_time
                root.destroy()
                continueRoutine = False
                record_time = True
                return inputValue, end_rt

            root.overrideredirect(True)
             #Root Geometry
            root_Width = 400
            root_Length = 300

            # Coordinates of top left pixel of application for centred
            x_left = int(root.winfo_screenwidth()/2-root_Width/2)
            y_top = int(root.winfo_screenheight()/2-root_Length/2)
            root_Pos = "+" + str(x_left) + "+" + str(y_top)

            # Window size and position
            root.geometry(str(root_Width) + "x" + str(root_Length) + root_Pos)
            #root.geometry('400x300+400+200')

            Tx = Text(root, font = ("MalgunGothic 30 bold"), height = 5)
            Tx.pack(side = TOP)

            button = Button(root, text='입력완료', command=lambda: retrieve_input(), height = 3, width= 20)
            button.pack(expand=1, side = BOTTOM)
            root.update()
            root.mainloop()
            print(inputValue)
            break
        wth_trials.addData('wth_resp', inputValue) ########
        wth_trials.addData('wth_rt', end_rt) ########
        #if gotValidClick == True:
        #    wth_word_type_end = wth_wordClock.getTime() ###########
  Routine wth_rating
    ImageComponent wth_background_3
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent wth_word_typed
      color = black
      font = Malgun Gothic
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inputValue
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    SliderComponent wth_valence_rating
      borderColor = black
      color = black
      fillColor = red
      font = Malgun Gothic
      forceEndRoutine = False
      granularity = 0
      labels = ("부정", "중립", "긍정")
      letterHeight = 0.03
      pos = (-0.5, -.1)
      saveStartStop = False
      size = (0.45, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (-1, 0, 1)
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    TextComponent wth_valence_txt
      color = black
      font = Malgun Gothic
      letterHeight = 0.04
      pos = (-.5, -0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 단어에서 느껴지는 감정
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    TextComponent wth_self_txt
      color = black
      font = Malgun Gothic
      letterHeight = 0.04
      pos = (0.5, -.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 단어가 자신과 관련이 있는 정도
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    SliderComponent wth_self_rating
      borderColor = black
      color = black
      fillColor = red
      font = Malgun Gothic
      forceEndRoutine = False
      granularity = 0
      labels = ("전혀 나와 관련 없음","나와 관련 매우 많음")
      letterHeight = 0.03
      pos = (0.5, -.1)
      saveStartStop = False
      size = (.45, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 1)
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    TextboxComponent wth_rating_end
      autoLog = False
      bold = False
      color = black
      editable = False
      fillColor = white
      font = Malgun Gothic
      letterHeight = 0.03
      pos = (-.02, -.42)
      saveStartStop = False
      size = (0.19, 0.06)
      startVal [condition] = $wth_self_rating.rating and wth_valence_rating.rating
      text = 클릭해 주세요
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    MouseComponent wth_mouse
      clickable = wth_rating_end
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = $wth_self_rating.rating and wth_valence_rating.rating
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    CodeComponent wth_code_3
      Code Type = Auto->JS
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      Each Frame:
        wth_valence_rating.marker.size = (0.002,0.05)
        wth_self_rating.marker.size = (0.002,0.05)
      End Routine:
        win.mouseVisible = False
  Routine exp_end
    ImageComponent wth_end_image
      image = Mood Weather Module Artwork/weather input/background.png
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent exp_end_text
      color = black
      font = Malgun Gothic
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        단어연상 종료

        충분히 휴식하시고
        스페이스를 눌러
        다음 과제로 넘어가세요.

        (진행자: 키보드 제거)
    KeyboardComponent exp_end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Total_control
  Routine general_instruction
  LoopInitiator weather loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = skip_weather
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    Routine wth_inst
    LoopInitiator wth_repeat_prac loopType="TrialHandler"
      loopType = sequential
      nReps = wth_repeat_prac_n
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      Routine wth_begin_prac
      Routine wth_think_prac
      Routine wth_word_prac
      Routine wth_rating_prac
      Routine wth_end_inst
    LoopTerminator wth_repeat_prac
    Routine wth_start
    Routine wth_begin_main
    LoopInitiator wth_trials loopType="TrialHandler"
      loopType = sequential
      nReps = wth_trials_n
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      Routine wth_think
      Routine wth_word
      Routine wth_rating
    LoopTerminator wth_trials
    Routine exp_end
  LoopTerminator weather
  LoopInitiator total_experiment loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine total_loop
    LoopInitiator boat loopType="TrialHandler"
      loopType = sequential
      nReps = boat_loop
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      Routine fl_starter_code
      Routine fl_inst
      Routine fl_fix_2
      LoopInitiator flanker_prac_loop loopType="TrialHandler"
        conditionsFile = loop/flanker.xlsx
        loopType = random
        nReps = fprac
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        conditions:
          [{'target': 'negative', 'distractor': 'negative', 'set': 1, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'neutral', 'set': 1, 'ans1': 'k', 'ans2': 'k'},
          {'target': 'positive', 'distractor': 'positive', 'set': 1, 'ans1': 'l', 'ans2': 'j'},
          {'target': 'negative', 'distractor': 'neutral', 'set': 1, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'positive', 'set': 1, 'ans1': 'k', 'ans2': 'k'},
          {'target': 'positive', 'distractor': 'negative', 'set': 1, 'ans1': 'l', 'ans2': 'j'},
          {'target': 'negative', 'distractor': 'positive', 'set': 1, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'negative', 'set': 1, 'ans1': 'k', 'ans2': 'k'},
          {'target': 'positive', 'distractor': 'neutral', 'set': 1, 'ans1': 'l', 'ans2': 'j'},
          {'target': 'negative', 'distractor': 'negative', 'set': 2, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'neutral', 'set': 2, 'ans1': 'k', 'ans2': 'k'},
          {'target': 'positive', 'distractor': 'positive', 'set': 2, 'ans1': 'l', 'ans2': 'j'},
          {'target': 'negative', 'distractor': 'neutral', 'set': 2, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'positive', 'set': 2, 'ans1': 'k', 'ans2': 'k'},
          {'target': 'positive', 'distractor': 'negative', 'set': 2, 'ans1': 'l', 'ans2': 'j'},
          {'target': 'negative', 'distractor': 'positive', 'set': 2, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'negative', 'set': 2, 'ans1': 'k', 'ans2': 'k'}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
        Routine fl_tag_prac
        Routine Flanker
        Routine flankerfeedback
      LoopTerminator flanker_prac_loop
      Routine fl_say_main
      Routine fl_fix_2
      LoopInitiator flanker_main_loop loopType="TrialHandler"
        conditionsFile = loop/flanker.xlsx
        loopType = random
        nReps = fmain
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        conditions:
          [{'target': 'negative', 'distractor': 'negative', 'set': 1, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'neutral', 'set': 1, 'ans1': 'k', 'ans2': 'k'},
          {'target': 'positive', 'distractor': 'positive', 'set': 1, 'ans1': 'l', 'ans2': 'j'},
          {'target': 'negative', 'distractor': 'neutral', 'set': 1, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'positive', 'set': 1, 'ans1': 'k', 'ans2': 'k'},
          {'target': 'positive', 'distractor': 'negative', 'set': 1, 'ans1': 'l', 'ans2': 'j'},
          {'target': 'negative', 'distractor': 'positive', 'set': 1, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'negative', 'set': 1, 'ans1': 'k', 'ans2': 'k'},
          {'target': 'positive', 'distractor': 'neutral', 'set': 1, 'ans1': 'l', 'ans2': 'j'},
          {'target': 'negative', 'distractor': 'negative', 'set': 2, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'neutral', 'set': 2, 'ans1': 'k', 'ans2': 'k'},
          {'target': 'positive', 'distractor': 'positive', 'set': 2, 'ans1': 'l', 'ans2': 'j'},
          {'target': 'negative', 'distractor': 'neutral', 'set': 2, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'positive', 'set': 2, 'ans1': 'k', 'ans2': 'k'},
          {'target': 'positive', 'distractor': 'negative', 'set': 2, 'ans1': 'l', 'ans2': 'j'},
          {'target': 'negative', 'distractor': 'positive', 'set': 2, 'ans1': 'j', 'ans2': 'l'},
          {'target': 'neutral', 'distractor': 'negative', 'set': 2, 'ans1': 'k', 'ans2': 'k'}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
        Routine fl_tag_main
        Routine Flanker
        Routine flankerfeedback
      LoopTerminator flanker_main_loop
    LoopTerminator boat
    LoopInitiator para loopType="TrialHandler"
      loopType = sequential
      nReps = para_loop
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      Routine para_starter_code
      Routine para_inst
      Routine para_fix
      LoopInitiator para_prac_loop loopType="TrialHandler"
        conditionsFile = loop/stroop_prac.xlsx
        loopType = random
        nReps = para_prac
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        conditions:
          [{'distractor': 'negative', 'target': 'yellow', 'set': 1, 'ans1': 'k', 'ans2': None},
          {'distractor': 'positive', 'target': 'red', 'set': 2, 'ans1': None, 'ans2': None},
          {'distractor': 'negative', 'target': 'blue', 'set': 2, 'ans1': None, 'ans2': 'k'},
          {'distractor': 'positive', 'target': 'yellow', 'set': 1, 'ans1': None, 'ans2': 'k'},
          {'distractor': 'negative', 'target': 'blue', 'set': 2, 'ans1': None, 'ans2': 'k'},
          {'distractor': 'negative', 'target': 'blue', 'set': 1, 'ans1': None, 'ans2': 'k'},
          {'distractor': 'negative', 'target': 'yellow', 'set': 2, 'ans1': 'k', 'ans2': None},
          {'distractor': 'negative', 'target': 'red', 'set': 1, 'ans1': None, 'ans2': None},
          {'distractor': 'positive', 'target': 'yellow', 'set': 2, 'ans1': None, 'ans2': 'k'},
          {'distractor': 'negative', 'target': 'yellow', 'set': 1, 'ans1': 'k', 'ans2': None},
          {'distractor': 'positive', 'target': 'yellow', 'set': 2, 'ans1': None, 'ans2': 'k'},
          {'distractor': 'negative', 'target': 'yellow', 'set': 2, 'ans1': 'k', 'ans2': None},
          {'distractor': 'negative', 'target': 'red', 'set': 2, 'ans1': None, 'ans2': None},
          {'distractor': 'positive', 'target': 'red', 'set': 1, 'ans1': None, 'ans2': None},
          {'distractor': 'positive', 'target': 'blue', 'set': 2, 'ans1': 'k', 'ans2': None},
          {'distractor': 'positive', 'target': 'blue', 'set': 1, 'ans1': 'k', 'ans2': None},
          {'distractor': 'negative', 'target': 'blue', 'set': 1, 'ans1': None, 'ans2': 'k'},
          {'distractor': 'positive', 'target': 'blue', 'set': 2, 'ans1': 'k', 'ans2': None}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
        Routine para_tag_prc
        Routine parachute
        Routine para_feedback
      LoopTerminator para_prac_loop
      Routine para_say_main
      Routine para_fix
      LoopInitiator para_main_loop loopType="TrialHandler"
        conditionsFile = $st2_set
        loopType = random
        nReps = para_main
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        Routine para_tag_main
        Routine parachute
        Routine para_feedback
      LoopTerminator para_main_loop
    LoopTerminator para
    LoopInitiator fish loopType="TrialHandler"
      loopType = sequential
      nReps = fish_loop
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      Routine fis_initialSet
      Routine fis_Instruction
      Routine fis_readycount
      LoopInitiator fis_temp loopType="TrialHandler"
        conditionsFile = $GOprac
        loopType = sequential
        nReps = fish_practice_reps
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        Routine fis_practiral
        Routine fis_feedback_prac
      LoopTerminator fis_temp
      Routine fis_continue_prac
      Routine fis_readycount
      LoopInitiator fis_round loopType="TrialHandler"
        loopType = sequential
        nReps = fis_round_tot
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        LoopInitiator fis_trials loopType="TrialHandler"
          conditionsFile = $GOmain
          loopType = sequential
          nReps = fish_trials
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          Routine fis_main_trial
          Routine fis_feedback_trial
        LoopTerminator fis_trials
        Routine fis_main_control
        LoopInitiator fis_main_break loopType="TrialHandler"
          loopType = sequential
          nReps = fis_mainbreak
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          Routine fis_rout_break
          Routine fis_interblock
          Routine fis_readycount
        LoopTerminator fis_main_break
      LoopTerminator fis_round
    LoopTerminator fish
  LoopTerminator total_experiment
  Routine total_end
